begintemplate motor_unit

	create soma, dend[311]
    create hillock, is
    objref all, somatic, basal
    num_row=10000										
	objref iCaL[num_row]
    objref istim

    create muscle_unit
    objref xm
    
    proc init() {
		
        create soma, dend[311]
        create hillock, is
        create muscle_unit

        objref all, somatic, basal
        objref xm

       //v_init = -70

        //variables for lambda_f function used in geom_nseg()
        freq = 100 
	    d_lambda = 0.1

        //global constant and variables for loc_dend()
	    num_row=10000										
	    objref iCaL[num_row]
	    objref istim

        topol()
		subsets()
		geom()
        set_passive()
        set_active()
        set_props()
        musc_length()
		geom_nseg()
        loc_dend()

	}

	proc topol() { local i

        connect dend(0), soma(1)
        for i = 1, 2 connect dend[i](0), dend[i-1](1)
        connect dend[3](0), dend[1](1)
        connect dend[4](0), dend(1)
        for i = 5, 6 connect dend[i](0), dend[i-1](1)
        connect dend[7](0), dend[5](1)
        for i = 8, 9 connect dend[i](0), dend[7](1)
        for i = 10, 11 connect dend[i](0), dend[9](1)
        connect dend[12](0), dend[4](1)
        for i = 13, 16 connect dend[i](0), dend[i-1](1)
        connect dend[17](0), dend[15](1)
        connect dend[18](0), dend[14](1)
        connect dend[19](0), dend[13](1)
        for i = 20, 21 connect dend[i](0), dend[19](1)
        for i = 22, 23 connect dend[i](0), dend[21](1)
        connect dend[24](0), dend[12](1)
        connect dend[25](0), soma(1)
        for i = 26, 27 connect dend[i](0), dend[i-1](1)
        connect dend[28](0), dend[26](1)
        connect dend[29](0), dend[25](1)
        for i = 30, 31 connect dend[i](0), dend[29](1)
        for i = 32, 33 connect dend[i](0), dend[31](1)
        for i = 34, 35 connect dend[i](0), dend[i-1](1)
        connect dend[36](0), dend[34](1)
        for i = 37, 38 connect dend[i](0), dend[36](1)
        connect dend[39](0), dend[33](1)
        for i = 40, 41 connect dend[i](0), dend[39](1)
        connect dend[42](0), soma(1)
        for i = 43, 44 connect dend[i](0), dend[i-1](1)
        connect dend[45](0), dend[43](1)
        for i = 46, 47 connect dend[i](0), dend[45](1)
        connect dend[48](0), dend[42](1)
        for i = 49, 50 connect dend[i](0), dend[48](1)
        connect dend[51](0), soma(1)
        for i = 52, 57 connect dend[i](0), dend[i-1](1)
        connect dend[58](0), dend[56](1)
        for i = 59, 60 connect dend[i](0), dend[58](1)
        connect dend[61](0), dend[55](1)
        connect dend[62](0), dend[54](1)
        connect dend[63](0), dend[53](1)
        connect dend[64](0), dend[52](1)
        connect dend[65](0), dend[51](1)
        for i = 66, 67 connect dend[i](0), dend[65](1)
        for i = 68, 69 connect dend[i](0), dend[67](1)
        for i = 70, 71 connect dend[i](0), dend[69](1)
        for i = 72, 73 connect dend[i](0), dend[71](1)
        for i = 74, 75 connect dend[i](0), dend[73](1)
        for i = 76, 77 connect dend[i](0), dend[75](1)
        connect dend[78](0), soma(1)
        for i = 79, 80 connect dend[i](0), dend[78](1)
        for i = 81, 82 connect dend[i](0), dend[i-1](1)
        connect dend[83](0), dend[81](1)
        connect dend[84](0), dend[80](1)
        connect dend[85](0), soma(1)
        for i = 86, 90 connect dend[i](0), dend[i-1](1)
        connect dend[91](0), dend[89](1)
        connect dend[92](0), dend[88](1)
        connect dend[93](0), dend[87](1)
        for i = 94, 95 connect dend[i](0), dend[i-1](1)
        connect dend[96](0), dend[94](1)
        connect dend[97](0), dend[93](1)
        connect dend[98](0), dend[86](1)
        for i = 99, 100 connect dend[i](0), dend[98](1)
        for i = 101, 102 connect dend[i](0), dend[100](1)
        connect dend[103](0), dend[85](1)
        for i = 104, 105 connect dend[i](0), dend[i-1](1)
        connect dend[106](0), dend[104](1)
        connect dend[107](0), dend[103](1)
        for i = 108, 110 connect dend[i](0), dend[i-1](1)
        connect dend[111](0), dend[109](1)
        connect dend[112](0), dend[108](1)
        connect dend[113](0), dend[107](1)
        for i = 114, 115 connect dend[i](0), dend[i-1](1)
        connect dend[116](0), dend[114](1)
        connect dend[117](0), dend[113](1)
        connect dend[118](0), soma(1)
        for i = 119, 122 connect dend[i](0), dend[i-1](1)
        connect dend[123](0), dend[121](1)
        for i = 124, 125 connect dend[i](0), dend[123](1)
        connect dend[126](0), dend[120](1)
        connect dend[127](0), dend[119](1)
        connect dend[128](0), dend[118](1)
        for i = 129, 133 connect dend[i](0), dend[i-1](1)
        connect dend[134](0), dend[132](1)
        for i = 135, 136 connect dend[i](0), dend[i-1](1)
        connect dend[137](0), dend[135](1)
        connect dend[138](0), dend[134](1)
        connect dend[139](0), dend[131](1)
        for i = 140, 141 connect dend[i](0), dend[139](1)
        connect dend[142](0), dend[130](1)
        connect dend[143](0), dend[129](1)
        connect dend[144](0), dend[128](1)
        for i = 145, 146 connect dend[i](0), dend[i-1](1)
        connect dend[147](0), dend[145](1)
        for i = 148, 149 connect dend[i](0), dend[147](1)
        connect dend[150](0), dend[144](1)
        connect dend[151](0), soma(1)
        for i = 152, 154 connect dend[i](0), dend[i-1](1)
        connect dend[155](0), dend[153](1)
        for i = 156, 157 connect dend[i](0), dend[155](1)
        for i = 158, 159 connect dend[i](0), dend[157](1)
        for i = 160, 161 connect dend[i](0), dend[159](1)
        for i = 162, 163 connect dend[i](0), dend[161](1)
        connect dend[164](0), dend[152](1)
        for i = 165, 166 connect dend[i](0), dend[i-1](1)
        connect dend[167](0), dend[165](1)
        connect dend[168](0), dend[164](1)
        connect dend[169](0), dend[151](1)
        for i = 170, 171 connect dend[i](0), dend[i-1](1)
        connect dend[172](0), dend[170](1)
        connect dend[173](0), dend[169](1)
        for i = 174, 175 connect dend[i](0), dend[i-1](1)
        connect dend[176](0), dend[174](1)
        for i = 177, 178 connect dend[i](0), dend[176](1)
        for i = 179, 180 connect dend[i](0), dend[178](1)
        connect dend[181](0), dend[173](1)
        for i = 182, 183 connect dend[i](0), dend[i-1](1)
        connect dend[184](0), dend[182](1)
        connect dend[185](0), dend[181](1)
        for i = 186, 187 connect dend[i](0), dend[i-1](1)
        connect dend[188](0), dend[186](1)
        connect dend[189](0), dend[185](1)
        connect dend[190](0), soma(1)
        for i = 191, 193 connect dend[i](0), dend[i-1](1)
        connect dend[194](0), dend[192](1)
        connect dend[195](0), dend[191](1)
        connect dend[196](0), dend[190](1)
        for i = 197, 199 connect dend[i](0), dend[i-1](1)
        connect dend[200](0), dend[198](1)
        for i = 201, 202 connect dend[i](0), dend[200](1)
        connect dend[203](0), dend[197](1)
        connect dend[204](0), dend[196](1)
        for i = 205, 206 connect dend[i](0), dend[204](1)
        for i = 207, 208 connect dend[i](0), dend[206](1)
        for i = 209, 210 connect dend[i](0), dend[i-1](1)
        connect dend[211](0), dend[209](1)
        connect dend[212](0), dend[208](1)
        for i = 213, 214 connect dend[i](0), dend[212](1)
        connect dend[215](0), soma(1)
        for i = 216, 222 connect dend[i](0), dend[i-1](1)
        connect dend[223](0), dend[221](1)
        connect dend[224](0), dend[220](1)
        for i = 225, 226 connect dend[i](0), dend[224](1)
        connect dend[227](0), dend[219](1)
        connect dend[228](0), dend[218](1)
        connect dend[229](0), dend[217](1)
        connect dend[230](0), dend[216](1)
        connect dend[231](0), dend[215](1)
        for i = 232, 233 connect dend[i](0), dend[i-1](1)
        connect dend[234](0), dend[232](1)
        for i = 235, 236 connect dend[i](0), dend[234](1)
        for i = 237, 238 connect dend[i](0), dend[236](1)
        for i = 239, 240 connect dend[i](0), dend[238](1)
        connect dend[241](0), dend[231](1)
        for i = 242, 243 connect dend[i](0), dend[241](1)
        connect dend[244](0), soma(1)
        for i = 245, 249 connect dend[i](0), dend[i-1](1)
        connect dend[250](0), dend[248](1)
        for i = 251, 252 connect dend[i](0), dend[250](1)
        connect dend[253](0), dend[247](1)
        for i = 254, 255 connect dend[i](0), dend[253](1)
        connect dend[256](0), dend[246](1)
        connect dend[257](0), dend[245](1)
        connect dend[258](0), dend[244](1)
        for i = 259, 262 connect dend[i](0), dend[i-1](1)
        connect dend[263](0), dend[261](1)
        for i = 264, 265 connect dend[i](0), dend[263](1)
        for i = 266, 267 connect dend[i](0), dend[265](1)
        for i = 268, 269 connect dend[i](0), dend[267](1)
        for i = 270, 271 connect dend[i](0), dend[269](1)
        connect dend[272](0), dend[260](1)
        for i = 273, 274 connect dend[i](0), dend[i-1](1)
        connect dend[275](0), dend[273](1)
        connect dend[276](0), dend[272](1)
        for i = 277, 278 connect dend[i](0), dend[276](1)
        connect dend[279](0), dend[259](1)
        for i = 280, 281 connect dend[i](0), dend[i-1](1)
        connect dend[282](0), dend[280](1)
        connect dend[283](0), dend[279](1)
        for i = 284, 285 connect dend[i](0), dend[283](1)
        connect dend[286](0), dend[258](1)
        for i = 287, 288 connect dend[i](0), dend[i-1](1)
        connect dend[289](0), dend[287](1)
        connect dend[290](0), dend[286](1)
        for i = 291, 293 connect dend[i](0), dend[i-1](1)
        connect dend[294](0), dend[292](1)
        for i = 295, 296 connect dend[i](0), dend[294](1)
        connect dend[297](0), dend[291](1)
        for i = 298, 299 connect dend[i](0), dend[297](1)
        connect dend[300](0), dend[290](1)
        for i = 301, 303 connect dend[i](0), dend[i-1](1)
        connect dend[304](0), dend[302](1)
        connect dend[305](0), dend[301](1)
        for i = 306, 307 connect dend[i](0), dend[305](1)
        connect dend[308](0), dend[300](1)
        for i = 309, 310 connect dend[i](0), dend[308](1)
        basic_shape()

        connect hillock(0), soma(0)
	    connect is(1), hillock(1)

        connect muscle_unit(0), is(0)

	}

	proc basic_shape() {

        shape3d_1()
        shape3d_2()
        shape3d_3()
        shape3d_4()
        shape3d_5()
        shape3d_6()
        shape3d_7()
        shape3d_8()

	}

	proc shape3d_1() {
        soma {pt3dclear()
            pt3dadd(0, 0, 0, 48.8)
            pt3dadd(48.8, 0, 0, 48.8)
        }
        dend {pt3dclear()
            pt3dadd(51.7, 0, 0, 7.21)
            pt3dadd(88, 2, -88.5097, 7.21)
            pt3dadd(117, 18, -96.1909, 9.47)
        }
        dend[1] {pt3dclear()
            pt3dadd(117, 18, -96.1909, 9.47)
            pt3dadd(141, 50, -177.928, 2.54)
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        }
	}
	proc shape3d_2() {
        dend[30] {	pt3dadd(-383, 52, 192.079, 1.51)
            pt3dadd(-431, 33, 274, 0.95)
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        }
	}
	proc shape3d_3() {
        dend[68] {	pt3dadd(-542, 103, 44, 0.79)
            pt3dadd(-630, 124, 15.0172, 0.87)
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        }
	}
	proc shape3d_4() {
        dend[107] {	pt3dadd(373, -205, 278.331, 2.94)
        }
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        }
	}
	proc shape3d_5() {
        dend[150] {	pt3dadd(-749, -46, 72.5688, 0.65)
            pt3dadd(-740, -95, 7.43816, 1.11)
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        }
	}
	proc shape3d_6() {
        dend[192] {	pt3dadd(-409, 73, -311, 2.75)
            pt3dadd(-481, 90, -344, 3.61)
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        }
	}
	proc shape3d_7() {
        dend[233] {	pt3dadd(-24, 615, -548, 0.84)
            pt3dadd(-14, 676, -620, 1.01)
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        }
	}
	proc shape3d_8() {
        dend[275] {	pt3dadd(-107, -610, -350, 1.91)
            pt3dadd(-104, -702, -394, 1.59)
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        }
	}

	proc subsets() { local i

        objref all, somatic, basal
        all = new SectionList()
            soma all.append()
            for i=0, 310 dend[i] all.append()

        somatic = new SectionList()
            soma somatic.append()

        basal = new SectionList()
            for i=0, 310 dend[i] basal.append()

	}

	proc geom() {

        hillock	{ 		 
            nseg=10
            L=20	
            diam(0:1)=13:3
        }

        is	{ 		
            L=30	
            diam=3.3
        }

        muscle_unit {
	        L = 10
	        diam = 10
        }

	}
//	proc geom_nseg() {
//	}
//	access soma
  

	//----------------------------------------------//
	// Passive properties of the motoneuron model   //
	//----------------------------------------------//
    proc set_passive() {

        forall {
                insert pas	
                g_pas=1/11000 	//[S/cm^2]
                e_pas=-70 		//[mV]
                Ra=70 			//[Ohm*cm]
                cm=1 			//[microF/cm^2]
        }

        soma {
            g_pas=1/225 			//[S/cm^2]
        }

	}


	//----------------------------------------------//
	// Active properties of the motoneuron model    //
	//----------------------------------------------//
	proc set_active() {

        //celsius   =  36      			//[degree]

        soma	{
            insert Naf
                gnafbar_Naf = 0.71		//[S/cm^2]
                ena = 50				//[mV]
            insert KDr
                gkdrbar_KDr = 0.23
                ek = -80				//[mV]
            insert CaN
                gcanbar_CaN = 0.013 	//[S/cm^2]
            insert Ca_conc
            insert KCa
                gkcabar_KCa = 0.0258 	//[S/cm^2]
                ek = -80			 	//[mV]
        }

        is {
            insert Naf
                gnafbar_Naf = 2.7			//[S/cm^2]
                ena = 50					//[mV]
            insert Nap
                gnapbar_Nap = 0.033*10^-3	//[S/cm^2]
                ena = 50					//[mV]
            insert KDr
                gkdrbar_KDr = 0.17
                ek = -80					//[mV]
        }

        hillock {
            insert Naf
                gnafbar_Naf = 2.7			//[S/cm^2]
                ena = 50					//[mV]
            insert Nap
                gnapbar_Nap = 0.033*10^-3	//[S/cm^2]
                ena = 50					//[mV]
            insert KDr
                gkdrbar_KDr = 0.17
                ek = -80					//[mV]
        }

	}

	//----------------------------------------------------//
    // Passive and active properties of the muscle model  //
    //----------------------------------------------------//
    proc set_props() {

        muscle_unit	{
            insert pas
            // Cable property
                g_pas = 2*10^-3
            cm = 20

            // Calcium dynamics and cross-bridge mechanics
            insert CaSP
            //insert fHill

        }

	}

    //------------------------------------------------------------//
    //Isometric variation of muscle length						  //					
    //------------------------------------------------------------//
    proc musc_length() {

        muscle_unit xm = new Xm(0.5)

    }
    
    proc geom_nseg() {

        soma area(0.5) // make sure diam reflects 3d points
        forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  }
	
    }

    /* Sets nseg in each section to an odd value
	so that its segments are no longer than 
		d_lambda x the AC length constant
	at frequency freq in that section.

	Be sure to specify your own Ra and cm before calling geom_nseg()

	To understand why this works, 
	and the advantages of using an odd value for nseg,
	see  Hines, M.L. and Carnevale, N.T.
			NEURON: a tool for neuroscientists.
			The Neuroscientist 7:123-135, 2001.
	*/

	// these are reasonable values for most models
//	freq = 100      // Hz, frequency at which AC length constant will be computed
//	d_lambda = 0.1

	func lambda_f() { local i, x1, x2, d1, d2, lam
			if (n3d() < 2) {
					return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
			}
	// above was too inaccurate with large variation in 3d diameter
	// so now we use all 3-d points to get a better approximate lambda
			x1 = arc3d(0)
			d1 = diam3d(0)
			lam = 0
			for i=1, n3d()-1 {
					x2 = arc3d(i)
					d2 = diam3d(i)
					lam += (x2 - x1)/sqrt(d1 + d2)
					x1 = x2   d1 = d2
			}
			//  length of the section in units of lambda
			lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

			return L/lam
	}

    //---------------------------------------------------------------------------------------------------------------------------------//
	// Localization of intracellular stimulation at the soma and Ca-PIC channels over dendrites at the similar distance from the soma  //					
	//---------------------------------------------------------------------------------------------------------------------------------//

	// global constants
//	num_row=10000										

	// global variables
//	objref iCaL[num_row]
//	objref istim

	// localization of Ca-PIC channels at the similar Dpath
	proc loc_dend(){local max_dist, err_min, i, init, end, err_dist, x_min, j 

		max_dist=0											
		err_min=0
		init=0										
		end=0											
		err_dist=0										
		x_min=0
		j=0

		// calculate the longest Dpath from the soma
		forall {
			soma distance(0, 0)							
			for(x){
				if (max_dist < distance(x)) {					
				max_dist = distance(x)
				}
			}
			err_min=max_dist								
		}
		
		// set the specific Dpath
		i = 600 											 
		forall {
			init = distance(0)				     
			end  = distance(1)				     
			if (init<=i && i<end) {				 
				for(x) {
					err_dist=abs(i-distance(x))	 
					if (err_min > err_dist) {	 
						err_min = err_dist
						x_min=x
					}	
				}
				if(x_min==0){x_min=0.0001}
				if(x_min==1){x_min=0.9999}
				
				iCaL[j] = new CaL(x_min)
				iCaL[j].gcalbar=1.37 * area(x_min) * (10^-4)^2 * 10^3 //600um [mS/cm2]
				
				j=j+1						 
				err_min=max_dist			  
			}
		}
	}

endtemplate motor_unit